# 1 "/opt/topspin3.6.1/exp/stan/nmr/lists/pp/user/cp.lu"
;cp.lu
;
;
;Avance III version
;parameters: 
;p3 : proton 90 at power level PLW2
;p15 : contact time at PLW1(f1) and SPW0(f2)
;pl1 : X power level during contact
;pl2 : power level for 1H 90 deg pulse
;pl12 : decoupling power level (if not PLW13)
;pl13 : special decoupling power level
;sp0 : proton power level during contact
;cnst21 : on resonance, usually = 0
;cpdprg2 : e.g. cw, spinal64 (at PLW12)
;d1 : recycle delay
;pcpd2 : pulse length in decoupling sequence (e.g. 180deg)
;spnam0 : use e.g. ramp.100 or ramp90100.100 for variable amplitude CP
;zgoptns : -Dfslg, -Dlacq, -Dlcp15, or blank
;
;
;$CLASS=Solids
;$DIM=1D
;$TYPE=cross polarisation
;$SUBTYPE=simple 1D
;$COMMENT=basic cp experiment, arbitrary contact and decoupling schemes


prosol relations=<solids_cp>
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;Avancesolids.incl
;   for TCU3
;
;version 1 28.2.2001, written by HF
;	   4.4.2006, complemented by Ste

;$CLASS=Solids INCL
;$COMMENT=definitions for setrtp and setnmr

;switch between 1H or 19F output (H amplifier) 
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;gating pulse for RX, ADC and HPPR auto mode


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;explicit blanking of preamp, receiver, adc, not implemented yet


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;generate dwell clock


;turn dwell clock on/off
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;


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;define data sampling for WAHUHA type experiments, samples analogue or digitally for d9, closes receiver


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;explicit transmitter blanking, not supported yet

;NCO switching, to be implemented

;$Id: Avancesolids.incl,v 1.8.2.1 2017/02/22 17:02:01 ber Exp $
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"acqt0=0" ;defines t=0 for baseopt

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    dccorr
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1 ze

2 d1 do:f2
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;p15_prot.incl
;avance-version (13/01/29)
;Test the rf on-time and duty cycle
;protect against too long contact time
;Test the rf on-time and duty cycle 
;
;$CLASS=Solids INCL
;$COMMENT=protect against too long contact time


1m
if "p15 < 10.1m" goto Passp15
2u
print "contact time exceeds 10msec limit!"
goto HaltAcqu
Passp15, 1m
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;$Id: p15_prot.incl,v 1.8 2013/01/29 15:40:14 ber Exp $
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			;make sure p15 does not exceed 10 msec 
			;let supervisor change this pulseprogram if 
			;more is needed

;#ifndef lacq		
			;disable protection file for long acquisition change decoupling power !!! or you risk probe damage
			;if you set the label lacq (ZGOPTNS -Dlacq), the protection is disabled
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;#include <aq_prot.incl>	
			;allows max. 50 msec acquisition time, supervisor
			;may change  to max. 1s at less than 5 % duty cycle
			;and reduced decoupling field
;#endif

  1u fq=cnst21:f2
  (p3 pl2 ph1):f2
  (p15 pl1 ph2):f1 (p15:sp0 ph10):f2
  1u cpds2:f2 		;pl12 is used here with tppm, spinal, pl13 with cwlg, cwlgs
  go=2 ph31
  1m do:f2
  wr #0
HaltAcqu, 1m
exit

ph0= 0
ph1= 1 3
ph2= 0 0 2 2 1 1 3 3
ph10= 0
ph31= 0 2 2 0 1 3 3 1
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;$id: $
