# 1 "/opt/topspin3.1/exp/stan/nmr/lists/pp/user/cp.lu"
;cp.lu (TopSpin 2.0)

;basic cp experiment
;written by HF 1.3.2001
;changed by JOS 05/06/03
;comments added by STE 4.4.2006

;Avance II+ version
;parameters: 
;p3 : proton 90 deg pulse
;p15 : contact time at pl1 (f1) and pl2 (f2)
;pl1 : X power level during contact
;sp0 : proton power level during contact
;pl2 : proton 90 deg power level
;pl12 : decoupling power level (if not pl13)
;pl13 : special decoupliong power level
;d1 : recycle delay
;cnst21 : on resonance, usually = 0
;pcpd2 : pulse length in decoupling sequence
;cpdprg2 : cw, tppm (at pl12), or lgs, cwlg. cwlgs (LG-decoupling 
;spnam0 : use e.g. ramp.100 for variable amplitude CP
;here pl13 is used instead of pl12)
;zgoptns : -Dfslg, -Dlacq, or blank
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;$COMMENT=basic cp experiment, arbitrary contact and decoupling schemes
;$CLASS=Solids
;$DIM=1D
;$TYPE=cross polarisation
;$SUBTYPE=simple 1D
;$OWNER=Bruker
prosol relations=<solids_cp>

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;Avancesolids.incl
;   for TCU3
;
;version 1 28.2.2001, written by HF
;	   4.4.2006, complemented by Ste

;$COMMENT=definitions for setrtp and setnmr
;$CLASS=Solids INCL
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;switch between 1H or 19F output (H amplifier) 
;$OWNER=nmrsu


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;gating pulse for RX, ADC and HPPR auto mode


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;explicit blanking of preamp, receiver, adc, not implemented yet


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;generate dwell clock


;turn dwell clock on/off
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;


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;define data sampling for WAHUHA type experiments, samples analogue or digitally for d9, closes receiver


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;explicit transmitter blanking, not supported yet

;NCO switching, to be implemented

;$id: $
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
;cnst11 : to adjust t=0 for acquisition, if digmod = baseopt
"acqt0=1u*cnst11"

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    dccorr
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1 ze
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2 d1 do:f2
;#include <p15_prot.incl>	
			;make sure p15 does not exceed 10 msec	
			;let supervisor change this pulseprogram if 
			;more is needed

			;disable protection file for long acquisition change decoupling power !!! or you risk probe damage
			;if you set the label lacq (ZGOPTNS -Dlacq), the protection is disabled

;#include <aq_prot.incl>	
			;allows max. 50 msec acquisition time, supervisor
			;may change  to max. 1s at less than 5 % duty cycle
			;and reduced decoupling field
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  1u fq=cnst21:f2
  (p3  pl2 ph1):f2
  (p15 pl1 ph2):f1 (p15:sp0 ph10):f2
  go=2 ph31 cpds2:f2 		;pl12 is used here with tppm, pl13 with cwlg, cwlgs
  1m do:f2 
  wr #0
HaltAcqu, 1m
exit

ph0= 0
ph1= 1 3
ph2= 0 0 2 2 1 1 3 3
ph10= 0
ph31= 0 2 2 0 1 3 3 1
